---
API: 2.1
Description: Example using a VAS component
OpenSesame: 3.3.10
Platform: nt
Title: VAS Example
---
set width 1920
set uniform_coordinates yes
set title "VAS Demo"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "f:\\Program Files (x86)\\OpenSesame\\share\\opensesame_extensions\\example_experiments\\examples\\VAS"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad SECONDVAS
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw line color=white name=VASBODY2 penwidth=4 show_if=always x1=-500.0 x2=500.0 y1=0.0 y2=0.0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes name=VASMAX show_if=always text="Very much so" x=608 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes name=VASMIN show_if=always text="Not at all" x=-576 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=72 html=yes name=VASMAX show_if=always text="You could put your question(s) here" x=0 y=-356 z_index=0
	draw rect color=white fill=1 h=96 name=VASEXIT penwidth=4 show_if=always w=384 x=320 y=160 z_index=0
	draw rect color="#001120" fill=0 h=64 name=VASBODY penwidth=4 show_if=always w=1000 x=-500.0 y=-32.0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=72 html=yes show_if=always text=READY x=520 y=210 z_index=-1

define VAS2 SECONDVASExample
	set description "A Revised VAS modifier for a canvas"
	set VAS_MINLABEL_NAME VASMIN
	set VAS_MAXLABEL_NAME VASMAX
	set VAS_LINESIZE 40
	set VAS_EXITBUTTON_NAME VASEXIT
	set VAS_CURSOR_COLOR "#ffffff"
	set VAS_CANVAS_NAME SECONDVAS
	set VAS_BODY_NAME VASBODY

define sketchpad VASDEMOSCREEN
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw line color=white name=VASBODY penwidth=4 show_if=always x1=-500 x2=500 y1=0 y2=0 z_index=0
	draw line color=white name=VASCURSOR penwidth=4 show_if=always x1=-288 x2=-288 y1=-32 y2=32 z_index=0
	draw rect color=white fill=0 h=700 penwidth=1 show_if=always w=49 x=-624 y=-350 z_index=0
	draw line color="#ff0000" name=VASTIMER penwidth=48 show_if=always x1=-600 x2=-600 y1=350 y2=-350 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-500 x2=-500 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-450 x2=-450 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-400 x2=-400 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-350 x2=-350 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-300 x2=-300 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-250 x2=-250 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-200 x2=-200 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-150 x2=-150 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-100 x2=-100 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-50 x2=-50 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=0 x2=0 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=500 x2=500 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=450 x2=450 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=400 x2=400 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=350 x2=350 y1=-8 y2=8 z_index=0
	draw line color=white penwidth=1 show_if=always x1=300 x2=300 y1=-8 y2=8 z_index=0
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	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Enter your estimate within the given time.<br />" x=54 y=-403 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Very much so" x=416 y=32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Not at all" x=-544 y=32 z_index=0

define VAS VASExample
	set description "A VAS modifier for a canvas"
	set VAS_TIMER_NAME VASTIMER
	set VAS_EXIT_METHOD TIME
	set VAS_EXIT_KEY " "
	set VAS_ENCODER_ID MOUSE
	set VAS_DURATION 10000
	set VAS_CURSOR_STARTPOSITION 0
	set VAS_CURSOR_NAME VASCURSOR
	set VAS_CANVAS_NAME VASDEMOSCREEN
	set VAS_BODY_NAME VASBODY

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run VASDEMOSCREEN always
	run VASExample always
	run SECONDVAS always
	run SECONDVASExample always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

